'CR1000X Series Datalogger
'Smithsonian Environmental Research Center
'date: 1-9-2017
'program author: Roy Rich

' Program to multiplex redox probes
'

'Declare Variables and Units
Public BattV
Public PTemp_C
Public LCount

Public Statname As String ' logger name
Public PB ' packbus number of logger

Public RedoxRa(20)
Public RedoxRb(20)

Units BattV=Volts
Units PTemp_C=Deg C
Units RedoxRa=mV
Units RedoxRb=mV


'Define Data Tables
DataTable(Table1,True,-1)
DataInterval(0,5,min,10)

Sample (1, Statname,IEEE4)
Sample (1, BattV, FP2)
Sample(20,RedoxRa(),IEEE4)
Sample(20,RedoxRb(),IEEE4)
EndTable

'Main Program
BeginProg
'Main Scan
Scan(1,min,1,0)
'Default CR1000 Datalogger Battery Voltage measurement 'BattV'
    Statname = Status.StationName(1,1)
    PB = Status.PakBusAddress(1,1)

Battery(BattV)
'Default CR1000 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
PanelTemp(PTemp_C,_60Hz)
'Turn AM16/32 Multiplexer On
If IfTime (1,5,min)
SW12 (1)
'Multiplexer 1

PortSet(1,1)
Delay(0,1000,mSec)
LCount=1
SubScan(2000,msec,20)
PulsePort(2,5000)
'Switch to next AM16/32 Multiplexer channel

VoltDiff (RedoxRa(LCount),1,mv2500,1,True,0,_60Hz,1.0,0)

LCount=LCount+1

NextSubScan
'Turn AM16/32 Multiplexer Off
PortSet(1,0)
EndIf

If IfTime (2,5,min)
PortSet(1,1)
Delay(0,1000,mSec)
LCount=1
SubScan(2000,msec,20)
PulsePort(2,5000)
'Switch to next AM16/32 Multiplexer channel

VoltDiff (RedoxRb(LCount),1,mv2500,3,True,0,_60Hz,1.0,0)

LCount=LCount+1

NextSubScan
'Turn AM16/32 Multiplexer Off
PortSet(1,0)


''Multiplexer 2
'PortSet(C3,1)
'Delay(0,1000,mSec)
'LCount=1
'SubScan(2000,msec,12)
''Switch to next AM16/32 Multiplexer channel
'PulsePort(C4,20000)
''Generic Single Ended Voltage measurements 'DFVolt()' on AM16/32 Multiplexer
'VoltDiff (Volt_AM3(LCount),1,mV1000C,7,True,0,_60Hz,1.0,0)
'VoltDiff (Volt_AM4(LCount),1,mV1000C,8,True,0,_60Hz,1.0,0)
'LCount=LCount+1
'NextSubScan
''Turn AM16/32 Multiplexer Off
'PortSet(C3,0)

SW12 (0)
EndIf

'Call Data Tables and Store Data
CallTable Table1
NextScan
EndProg
